PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = 1
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Routines
  Routine trial
    CodeComponent code
      Code Type = Py
      Begin Routine:
        Hort_neg_375 = visual.Line(
            win=win, name='Hort_neg_375',
            start=(-(2, 2)[0]/2.0, 0), end=(+(2, 2)[0]/2.0, 0),
            ori=0, pos=(0, -.375),
            lineWidth=10, lineColor=[1,1,1], lineColorSpace='rgb',
            fillColor=[1,1,1], fillColorSpace='rgb',
            opacity=1, depth=-1.0, interpolate=True)
    ImageComponent image
      image = None
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  Routine trial
